PsychoPy2experiment version="2020.2.5"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 800]
  color = $[0.929,0.969,0.969]
  expName = atitude
  logging level = debug
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Routines
  Routine instrucoes
    TextComponent text
      color = black
      letterHeight = 0.04
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $instrucoestxt
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    TextComponent passagem_instrucoes
      color = black
      letterHeight = 0.03
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = Aperte ESPAÇO para continuar
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    KeyboardComponent passagemBarra_instrucoes
      allowedKeys = ['space']
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine experimento
    TextComponent ouca
      color = black
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 3
      text = Ouça o áudio
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    SoundComponent sound_clip
      sound [set every repeat] = $som
      startVal [time (s)] = 3
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    TextComponent repetir
      color = red
      letterHeight = 0.03
      pos = (0, 0.3)
      startVal [condition] = $sound_clip.status==FINISHED
      text = Aperte “r” se desejar ouvir o áudio novamente
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    CodeComponent code_sound
      Code Type = Auto->JS
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      Begin Routine:
        def playSound():
            beep = sound.Sound(som, secs=.3)  # You will probably need to add your sound variable e.g. 'Sound'
            beep.setVolume(1)
            beep.play()
            core.wait(.3)
      Each Frame:
        if event.getKeys(keyList=["r"]):
            playSound()
    CodeComponent slider_code
      Code Type = Auto->JS
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      Begin Routine:
        slider = visual.Slider(win=win, name='slider',
            size=(0.5, 0.1), pos=(0, -0.1),
            labels=['1 \npouco', '3', '5 \nmuito'], ticks=(1, 2, 3, 4, 5),
            granularity=1, style=('triangleMarker'),
            color='black', font='HelveticaBold',
            flip=False, labelHeight = .03)
        slider.marker.size=(.05,.05)
    SliderComponent slider
      color = black
      forceEndRoutine = False
      granularity = 1
      labels = ("1 = pouco", "2", "3", "4", "5 = muito")
      pos = (0, -0.2)
      size = (1.0, 0.1)
      startVal [condition] = $sound_clip.status==FINISHED
      styles = ['rating', 'triangleMarker']
      ticks = (1, 2, 3, 4, 5)
      units = height
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    TextComponent passagem
      color = black
      letterHeight = 0.03
      pos = (0, -0.4)
      startVal [condition] = $sound_clip.status==FINISHED
      text = Aperte ESPAÇO para continuar
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    KeyboardComponent passagemBarra
      allowedKeys = ['space']
      forceEndRoutine = True
      startVal [condition] = $sound_clip.status==FINISHED
      store = nothing
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    TextComponent pergunta
      color = black
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [condition] = $sound_clip.status==FINISHED
      text [set every repeat] = $clique
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    StaticComponent ISI
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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  Routine aviso_caracteristica
    TextComponent aviso_txt
      color = black
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $aviso
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    TextComponent text_2
      color = black
      letterHeight = 0.03
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = Aperte ESPAÇO para ouvir o áudio
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    KeyboardComponent passagem_aviso
      allowedKeys = ['space']
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine final
    TextComponent text_3
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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      text:
        O experimento acabou!

        Muito obrigado!
Flow
  LoopInitiator instructions loopType="TrialHandler"
    conditionsFile = instrucoes.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('numero', 1), ('instrucoestxt', 'Você vai ouvir trechos de algumas entrevistas. \n\n\n Sua tarefa será julgar algumas características da pessoa que está falando.')]),
      OrderedDict([('numero', 2), ('instrucoestxt', 'Depois de ouvir o áudio, você deverá apontar em uma escala de 1 a 5 o quanto você acha que aquela pessoa é educada ou inteligente.')]),
      OrderedDict([('numero', 3), ('instrucoestxt', 'Você poderá apertar "r" para repetir o áudio se precisar. \n\n\nSugerimos que faça o experimento com fones de ouvido.')]),
      OrderedDict([('numero', 4), ('instrucoestxt', 'Na tela seguinte, você fará um pequeno treino com uma entrevista para você se acostumar à tarefa.')])]
    Routine instrucoes
  LoopTerminator instructions
  LoopInitiator loop_experimento loopType="TrialHandler"
    conditionsFile = experimentais.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('lista', 'a'), ('item', 'item_1'), ('condicao', 'tepe'), ('som', 'audioexp/1tepe.wav'), ('clique', 'Clique na escala para julgar quão EDUCADA é essa pessoa'), ('caracteristica', 'educacao'), ('aviso', 'Ouça o áudio e julgue se essa pessoa é EDUCADA')]),
      OrderedDict([('lista', 'a'), ('item', 'item_2'), ('condicao', 'retro'), ('som', 'audioexp/2retro.wav'), ('clique', 'Clique na escala para julgar quão EDUCADA é essa pessoa'), ('caracteristica', 'educacao'), ('aviso', 'Ouça o áudio e julgue se essa pessoa é EDUCADA')]),
      OrderedDict([('lista', 'a'), ('item', 'item_3'), ('condicao', 'tepe'), ('som', 'audioexp/3tepe.wav'), ('clique', 'Clique na escala para julgar quão EDUCADA é essa pessoa'), ('caracteristica', 'educacao'), ('aviso', 'Ouça o áudio e julgue se essa pessoa é EDUCADA')]),
      OrderedDict([('lista', 'a'), ('item', 'item_4'), ('condicao', 'retro'), ('som', 'audioexp/4retro.wav'), ('clique', 'Clique na escala para julgar quão EDUCADA é essa pessoa'), ('caracteristica', 'educacao'), ('aviso', 'Ouça o áudio e julgue se essa pessoa é EDUCADA')]),
      OrderedDict([('lista', 'a'), ('item', 'item_1'), ('condicao', 'tepe'), ('som', 'audioexp/1tepe.wav'), ('clique', 'Clique na escala para julgar quão INTELIGENTE é essa pessoa'), ('caracteristica', 'inteligente'), ('aviso', 'Ouça o áudio e julgue se essa pessoa é INTELIGENTE')])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
    Routine aviso_caracteristica
    Routine experimento
  LoopTerminator loop_experimento
  Routine final
