PsychoPy2experiment version="2020.2.5"
Settings
  Experiment info = {'participant': ''}
  Force stereo = False
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 800]
  color = $[0.898,0.969,0.898]
  expName = decisao_lexical
  logging level = debug
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Routines
  Routine treino_palavra
    TextComponent treino_item
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every frame] = $palavra
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    KeyboardComponent resposta_treino
      allowedKeys = 'right', 'left'
      correctAns = $resposta
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      storeCorrect = True
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    TextComponent relembraresq_2
      color = black
      letterHeight = 0.04
      pos = (-0.3, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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      text:
        SIM
        ←
    TextComponent relembrardir2
      color = black
      letterHeight = 0.03
      pos = (0.3, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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      text:
        NÃO
        →
  Routine pos_treino
    TextComponent comecar
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Se você entendeu a tarefa, é hora de começar o experimento!



        Aperte ESPAÇO para começar.
    KeyboardComponent key_comecar
      allowedKeys = ['space']
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine experimental
    TextComponent positivo_experimental
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every frame] = +
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  Routine final
    TextComponent final_texto
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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      text:
        O experimento acabou!



        Muito obrigado por sua participação!
  Routine instrucoes
    TextComponent instrucoes_txt
      color = black
      font = Lucida
      letterHeight = 0.04
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $instrucoestxt
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    KeyboardComponent key_respInstrucoes
      allowedKeys = ['space']
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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    TextComponent pressioneESPACOinstrucoes
      color = black
      letterHeight = 0.03
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = Pressione ESPAÇO para continuar
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  Routine positivo
    TextComponent positivo_treino
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = +
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    TextComponent relembrar_esq
      color = black
      letterHeight = 0.04
      pos = (-0.3, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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      text:
        SIM
        ←
    TextComponent relembrar_dir
      color = black
      letterHeight = 0.03
      pos = (0.3, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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      text:
        NÃO
        →
  Routine positivo_2
    TextComponent positivo_experimento
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = +
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    TextComponent relembrar_esq_2
      color = black
      letterHeight = 0.04
      pos = (-0.3, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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      text:
        SIM
        ←
    TextComponent relembrar_dir_2
      color = black
      letterHeight = 0.03
      pos = (0.3, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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      text:
        NÃO
        →
  Routine experimental_palavra
    TextComponent experimental_item
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every frame] = $palavra
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    KeyboardComponent resposta_experimental
      allowedKeys = 'right', 'left'
      correctAns = $resposta
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      storeCorrect = True
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    TextComponent relembraresq
      color = black
      letterHeight = 0.04
      pos = (-0.3, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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      text:
        SIM
        ←
    TextComponent relembrardir2_2
      color = black
      letterHeight = 0.03
      pos = (0.3, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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      text:
        NÃO
        →
Flow
  LoopInitiator instrucoes_loop loopType="TrialHandler"
    conditionsFile = instrucoes.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('numero', 1), ('instrucoestxt', 'Olá! Agradecemos por participar de nosso experimento. \n\n\n Por favor, certifique-se de que você tem 5 minutos para participar sem precisar interromper o experimento.')]),
      OrderedDict([('numero', 2), ('instrucoestxt', 'Você verá algumas palavras aparecerem no centro da tela, após o sinal +. \n\n\n A sua tarefa será julgar se essas palavras são ou não palavras do português.')]),
      OrderedDict([('numero', 3), ('instrucoestxt', 'Algumas serão palavras do português, como "celular" ou "abacate". \n\n\n Outras parecerão português, mas não são palavras dessa língua, como "vortume" ou "cinfo".')]),
      OrderedDict([('numero', 4), ('instrucoestxt', 'Se for uma palavra do português, aperte a tecla ← (seta para a esquerda) \n\n\n Se não for uma palavra, aperte a tecla → (seta para a direita)')]),
      OrderedDict([('numero', 5), ('instrucoestxt', 'Você terá dois segundos para responder antes de passar à tela seguinte. \n\n\n Responda o mais rápido que conseguir!')]),
      OrderedDict([('numero', 6), ('instrucoestxt', 'Na tela seguinte, começaremos um pequeno treino para você se acostumar à tarefa.')])]
    Routine instrucoes
  LoopTerminator instrucoes_loop
  LoopInitiator treino_loop loopType="TrialHandler"
    conditionsFile = treino.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('item', 'pratica_01'), ('cond', 'pratica'), ('palavra', 'lanterna'), ('resposta', 'left')]),
      OrderedDict([('item', 'pratica_02'), ('cond', 'pratica'), ('palavra', 'sapato'), ('resposta', 'left')]),
      OrderedDict([('item', 'pratica_03'), ('cond', 'pratica'), ('palavra', 'lupovi'), ('resposta', 'right')]),
      OrderedDict([('item', 'pratica_04'), ('cond', 'pratica'), ('palavra', 'toquepo'), ('resposta', 'right')])]
    Routine positivo
    Routine treino_palavra
  LoopTerminator treino_loop
  Routine pos_treino
  LoopInitiator experimental_loop loopType="TrialHandler"
    conditionsFile = experimentais_declex.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('item', 'exp_01'), ('cond', 'longa'), ('palavra', 'capacete'), ('resposta', 'left')]),
      OrderedDict([('item', 'exp_02'), ('cond', 'longa'), ('palavra', 'brinquedo'), ('resposta', 'left')]),
      OrderedDict([('item', 'exp_03'), ('cond', 'longa'), ('palavra', 'computador'), ('resposta', 'left')]),
      OrderedDict([('item', 'exp_04'), ('cond', 'longa'), ('palavra', 'camiseta'), ('resposta', 'left')]),
      OrderedDict([('item', 'exp_05'), ('cond', 'longa'), ('palavra', 'sabonete'), ('resposta', 'left')]),
      OrderedDict([('item', 'exp_06'), ('cond', 'curta'), ('palavra', 'pano'), ('resposta', 'left')]),
      OrderedDict([('item', 'exp_07'), ('cond', 'curta'), ('palavra', 'sapo'), ('resposta', 'left')]),
      OrderedDict([('item', 'exp_08'), ('cond', 'curta'), ('palavra', 'roda'), ('resposta', 'left')]),
      OrderedDict([('item', 'exp_09'), ('cond', 'curta'), ('palavra', 'missa'), ('resposta', 'left')]),
      OrderedDict([('item', 'exp_10'), ('cond', 'curta'), ('palavra', 'rua'), ('resposta', 'left')]),
      OrderedDict([('item', 'filler01'), ('cond', 'filler'), ('palavra', 'guponta'), ('resposta', 'right')]),
      OrderedDict([('item', 'filler02'), ('cond', 'filler'), ('palavra', 'fombuste'), ('resposta', 'right')]),
      OrderedDict([('item', 'filler03'), ('cond', 'filler'), ('palavra', 'butife'), ('resposta', 'right')]),
      OrderedDict([('item', 'filler04'), ('cond', 'filler'), ('palavra', 'sevoate'), ('resposta', 'right')]),
      OrderedDict([('item', 'filler05'), ('cond', 'filler'), ('palavra', 'fadala'), ('resposta', 'right')])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
    Routine positivo_2
    Routine experimental_palavra
  LoopTerminator experimental_loop
  Routine final
