PsychoPy2experiment version="2020.2.5"
Settings
  Experiment info = {'participant': ''}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 800]
  color = $[0.937,0.961,0.984]
  expName = spr
  logging level = debug
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Routines
  Routine p1
    TextComponent p_experimental
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $word_list.pop()
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    KeyboardComponent rt_p_experimental
      allowedKeys = ['space']
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine pergunta
    TextComponent perguntatxt
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $pergunta
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    KeyboardComponent resposta_pergunta_experimental
      allowedKeys = 's', 'n'
      correctAns = $correta
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    CodeComponent code_followup
      Code Type = Auto->JS
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      Begin Routine:
        if not followUp:
            continueRoutine = False
  Routine positivo
    TextComponent positivotxt
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = +
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    KeyboardComponent resp_positivo
      allowedKeys = ['space']
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_split
      Code Type = Auto->JS
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      Begin Routine:
        word_list = sentenca.split()
        word_list.reverse()
  Routine obrigada
    TextComponent agradecimento
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text:
        O experimento acabou.

        Muito obrigada por sua participação!
  Routine passagem
    TextComponent text_2
      color = red
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Aperte ESPAÇO para começar uma nova sentença
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    KeyboardComponent passagem_resp
      allowedKeys = ['space']
      forceEndRoutine = True
      startVal [time (s)] = 1.5
      store = nothing
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  Routine positivo_treino
    TextComponent positivotxt_treino
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = +
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    KeyboardComponent resp_positivo_treino
      allowedKeys = ['space']
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_split_2
      Code Type = Auto->JS
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      Begin Routine:
        word_list = sentenca.split()
        word_list.reverse()
  Routine p_treino
    TextComponent p_treino_txt
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $word_list.pop()
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    KeyboardComponent rt_treino
      allowedKeys = ['space']
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine pergunta_treino
    TextComponent pergunta_treinotxt
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $pergunta
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    KeyboardComponent resposta_pergunta_treino
      allowedKeys = 's', 'n'
      correctAns = $correta
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    CodeComponent code_followup_2
      Code Type = Auto->JS
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      Begin Routine:
        if not followUp:
            continueRoutine = False
  Routine passagem_treino
    TextComponent text_4
      color = red
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Aperte ESPAÇO para começar uma nova sentença
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    KeyboardComponent passagem_resp_2
      allowedKeys = ['space']
      forceEndRoutine = True
      startVal [time (s)] = 1.5
      store = nothing
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  Routine comecar
    TextComponent comecartxt
      color = black
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Se você entendeu a tarefa, já podemos começar o experimento!


        Pressione ESPAÇO para iniciar
    KeyboardComponent key_resp_2
      allowedKeys = ['space']
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine feedback
    CodeComponent code_break
      Code Type = Auto->JS
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      Begin Experiment:
        mensagem = ""
      Begin Routine:
        if resposta_pergunta_experimental.corr :
            mensagem = "Correto!"
            mensagem_color = "green"
        else:
            mensagem = "Errado!"
            mensagem_color = "red"
    TextComponent texto_break
      color [set every repeat] = $mensagem_color
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $mensagem
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        if not followUp:
            continueRoutine = False
  Routine feedback_treino
    CodeComponent code_break_2
      Code Type = Auto->JS
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      Begin Experiment:
        mensagem = ""
      Begin Routine:
        if resposta_pergunta_treino.corr :
            mensagem = "Correto!"
            mensagem_color = "green"
        else:
            mensagem = "Errado!"
            mensagem_color = "red"
    TextComponent texto_break_2
      color [set every repeat] = $mensagem_color
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $mensagem
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  Routine break_2
    TextComponent breaktxt
      color = red
      letterHeight = 0.05
      startVal [time (s)] = 0
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      text:
        Já estamos na metade do caminho!

        Se você estiver cansado, faça uma pausa.


        Quando estiver pronto, pressione ESPAÇO para retomar o experimento
    KeyboardComponent break_keyboard
      allowedKeys = ['space']
      forceEndRoutine = True
      startVal [time (s)] = 3.0
      store = nothing
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    CodeComponent break_code
      Code Type = Auto->JS
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      Begin Routine:
        if trials.thisN != 9:
            continueRoutine = False
  Routine instrucoes
    TextComponent txtinstrucoes
      color = black
      letterHeight = 0.04
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $instrucoestxt
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    KeyboardComponent instrESPACO
      allowedKeys = ['space']
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent txtESPACO
      color = black
      letterHeight = 0.04
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = Pressione ESPAÇO para continuar
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Flow
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = instrucoes.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('numero', 1), ('instrucoestxt', 'Obrigado por participar do nosso experimento \n\n\n ')]),
      OrderedDict([('numero', 2), ('instrucoestxt', 'Com este experimento, queremos estudar como as pessoas compreendem histórias. \n\n Nossa pergunta é: o que acontece na mente de uma pessoa quando ela lê um texto?')]),
      OrderedDict([('numero', 3), ('instrucoestxt', 'Para nos ajudar a responder essa pergunta, você lerá textos que serão apresentadas aos poucos, palavra por palavra. \n\n Para passar de uma palavra a outra, você deverá apertar a BARRA DE ESPAÇO.')]),
      OrderedDict([('numero', 4), ('instrucoestxt', 'Depois de cada frase, você deverá responder uma pergunta sobre seu conteúdo. \n\n Pressione S se a resposta for "sim" e N se a resposta for "não".')]),
      OrderedDict([('numero', 5), ('instrucoestxt', 'Vamos fazer um treino com duas sentenças para você se acostumar. \n\n Lembre-se: você deve apertar BARRA DE ESPAÇO para ir lendo as palavras da sentença.')])]
    Routine instrucoes
  LoopTerminator trials_2
  LoopInitiator loop_outer_treino loopType="TrialHandler"
    conditionsFile = treino.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('item', 'treino1'), ('sentenca', 'Essa é uma sentença de exemplo. Você lerá muitas sentenças dessa maneira e o experimento deve levar cerca de 20 minutos.'), ('pergunta', 'O experimento leva cerca de 1 hora?'), ('correta', 'n'), ('followUp', 1)]),
      OrderedDict([('item', 'treino2'), ('sentenca', 'Eu participei de um experimento na universidade. Eles queriam saber como as pessoas liam sentenças.'), ('pergunta', 'Participei de um experimento sobre leitura?'), ('correta', 's'), ('followUp', 1)])]
    Routine positivo_treino
    LoopInitiator loop_inner_treino loopType="TrialHandler"
      loopType = sequential
      nReps = len(word_list)
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      Routine p_treino
    LoopTerminator loop_inner_treino
    Routine pergunta_treino
    Routine feedback_treino
    Routine passagem_treino
  LoopTerminator loop_outer_treino
  Routine comecar
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = experimentais_A.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('lista', 'a'), ('item', 'item_1'), ('tipo', 'prev'), ('sentenca', 'O casal olhou o cardápio do restaurante até conseguir se decidir. Eles chamaram a garçonete, que anotou o extenso e detalhado pedido com um lápis.'), ('pergunta', 'A garçonete anotou muitas coisas quando atendeu o casal?'), ('correta', 's'), ('followUp', 1)]),
      OrderedDict([('lista', 'a'), ('item', 'item_2'), ('tipo', 'prev'), ('sentenca', 'Em nenhuma das partidas anteriores do campeonato aconteceu uma falta tão violenta quanto aquela. O árbitro usou o cartão vermelho para punir o agressivo e descontrolado jogador do time.'), ('pergunta', 'O jogador foi punido com um cartão amarelo?'), ('correta', 'n'), ('followUp', 0)]),
      OrderedDict([('lista', 'a'), ('item', 'item_3'), ('tipo', 'prev'), ('sentenca', 'A professora demorou mais que o previsto para corrigir as provas de uma de suas turmas. Logo que terminou, ela abriu o sistema e inseriu as aguardadas e esperadas notas da unidade.'), ('pergunta', 'A professora postou os resultados assim que terminou de corrigir as provas?'), ('correta', 's'), ('followUp', 1)]),
      OrderedDict([('lista', 'a'), ('item', 'item_4'), ('tipo', 'prev'), ('sentenca', 'Renata estava dirigindo e percebeu que havia passado por cima de um prego. Ela parou e pegou as ferramentas para trocar o velho e gasto pneu o mais rápido possível.'), ('pergunta', 'Renata precisou chamar alguém para trocar o pneu?'), ('correta', 'n'), ('followUp', 0)])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
    Routine positivo
    LoopInitiator split_loop loopType="TrialHandler"
      loopType = random
      nReps = len(word_list)
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      Routine p1
    LoopTerminator split_loop
    Routine pergunta
    Routine feedback
    Routine passagem
    Routine break_2
  LoopTerminator trials
  Routine obrigada
